PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'subject num': '', 'run': '', 'age': '', 'gender': '', 'room': 'E', 'session': '001', 'version': 'percept'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = perceptual
  keyboardBackend = ioHub
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Routines
  Routine instructions
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_text
      languageStyle = RTL
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        שלום! מטרת הניסוי היא ללמוד על עיבוד ויזואלי מופשט בסביבה רועשת.
        בניסוי יוצגו צורות סגולות שנעות לתוך ומחוץ לריבוע אפור שיסתיר אותן.
         הצורות נראות דומות אחת לשניה, אבל ישנם הבדלים ביניהן.

        משימתך היא, עבור כל צורה שיוצאת מאחורי הריבוע האפור,
         לשפוט האם ה"ראש" של הצורה פונה למטה או למעלה.
        אם הראש פונה למעלה יש ללחוץ על K
        אם הראש פונה למטה יש ללחוץ על D
    ImageComponent greeble_example1
      image = stim\greebles\f4~42-a-v1.tif
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent greeble_example2
      image = stim\greebles\m2~27-a-v1.tif
      pos = (.3, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent greeble_example3
      image = stim\greebles\m5~56-a-v1.tif
      pos = (-.3, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent trial_example
      image [set every repeat] = stim\trial_example_img.png
      pos = (0.3, -0.3)
      size = (0.4, 0.25)
      startVal [time (s)] = 0.0
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  Routine q1
  Routine q2
    TextComponent awareness_q2
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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      text:
        Please indicate with the relevant keyboard number which of the categories were heard:

                  1                        2                3                   4                      5
        Sea animals  | Land animals | Birds  | Small objects | Large objects
    KeyboardComponent awareness_ans2
      allowedKeys = '1','2','3','4','5','0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
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  Routine feedback
    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Routine:
        #feed="Incorrect"
        #color="red"
        #
        #if nback_ans.keys==correct_resp:
        #    feed="Correct!"
        #    color="green"
        #old_category=visual_cat
    TextComponent feedback_txt
      color [set every repeat] = $color
      letterHeight = 0.1
      startEstim = 0.007
      startVal [frame N] = 1
      stopVal [duration (s)] = 0.35
      text [set every repeat] = $feed
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  Routine first_trial
    TextComponent text_stim_first
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.35
      stopVal [duration (s)] = 0.35
      text [set every repeat] = גרב
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    TextComponent mask2_first
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.35
      text = ########
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    SoundComponent aud_stim_first
      sound = stim/non4.wav
      startVal [time (s)] = 0.35
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    CodeComponent code_first
      Code Type = Auto->JS
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      Begin Routine:
        old_category="object"
  Routine set_blck_feed
    CodeComponent set_block_feed
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = trials.data['nback_ans.corr'].sum()
        msg = "You got %i trials correct" %(nCorr)
  Routine first_greeble
    TextComponent text_stim_2
      disabled = True
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $visual_word
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    KeyboardComponent nback_ans_2
      allowedKeys = 's','d'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.
      stopVal [duration (s)] = 2
      storeCorrect = True
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    SoundComponent aud_stim_2
      sound [set every repeat] = $auditory_word
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = .6
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    CodeComponent set_correct_2
      Code Type = Auto->JS
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      Begin Experiment:
        greeble_list = ['stim/greebles/f1~11-a-v1',
         'stim/greebles/f1~12-a-v1',
         'stim/greebles/f1~13-a-v1',
         'stim/greebles/f1~14-a-v1',
         'stim/greebles/f1~15-a-v1',
         'stim/greebles/f1~16-a-v1',
         'stim/greebles/f2~21-a-v1',
         'stim/greebles/f2~22-a-v1',
         'stim/greebles/f2~23-a-v1',
         'stim/greebles/f2~24-a-v1',
         'stim/greebles/f2~25-a-v1',
         'stim/greebles/f2~26-a-v1',
         'stim/greebles/f3~31-a-v1',
         'stim/greebles/f3~310-a-v1',
         'stim/greebles/f3~32-a-v1',
         'stim/greebles/f3~33-a-v1',
         'stim/greebles/f3~34-a-v1',
         'stim/greebles/f3~35-a-v1',
         'stim/greebles/f3~36-a-v1',
         'stim/greebles/f3~37-a-v1',
         'stim/greebles/f3~38-a-v1',
         'stim/greebles/f3~39-a-v1',
         'stim/greebles/f4~41-a-v1',
         'stim/greebles/f4~42-a-v1',
         'stim/greebles/f4~43-a-v1',
         'stim/greebles/f4~44-a-v1',
         'stim/greebles/f4~45-a-v1',
         'stim/greebles/f4~46-a-v1',
         'stim/greebles/f5~51-a-v1',
         'stim/greebles/f5~510-a-v1',
         'stim/greebles/f5~52-a-v1',
         'stim/greebles/f5~53-a-v1',
         'stim/greebles/f5~54-a-v1',
         'stim/greebles/f5~55-a-v1',
         'stim/greebles/f5~56-a-v1',
         'stim/greebles/f5~57-a-v1',
         'stim/greebles/f5~58-a-v1',
         'stim/greebles/f5~59-a-v1',
         'stim/greebles/m1~11-a-v1',
         'stim/greebles/m1~110-a-v1',
         'stim/greebles/m1~12-a-v1',
         'stim/greebles/m1~13-a-v1',
         'stim/greebles/m1~14-a-v1',
         'stim/greebles/m1~15-a-v1',
         'stim/greebles/m1~16-a-v1',
         'stim/greebles/m1~17-a-v1',
         'stim/greebles/m1~18-a-v1',
         'stim/greebles/m1~19-a-v1',
         'stim/greebles/m2~21-a-v1',
         'stim/greebles/m2~210-a-v1',
         'stim/greebles/m2~22-a-v1',
         'stim/greebles/m2~23-a-v1',
         'stim/greebles/m2~24-a-v1',
         'stim/greebles/m2~25-a-v1',
         'stim/greebles/m2~26-a-v1',
         'stim/greebles/m2~27-a-v1',
         'stim/greebles/m2~28-a-v1',
         'stim/greebles/m2~29-a-v1',
         'stim/greebles/m3~31-a-v1',
         'stim/greebles/m3~32-a-v1',
         'stim/greebles/m3~33-a-v1',
         'stim/greebles/m3~34-a-v1',
         'stim/greebles/m3~35-a-v1',
         'stim/greebles/m3~36-a-v1',
         'stim/greebles/m4~41-a-v1',
         'stim/greebles/m4~410-a-v1',
         'stim/greebles/m4~42-a-v1',
         'stim/greebles/m4~43-a-v1',
         'stim/greebles/m4~44-a-v1',
         'stim/greebles/m4~45-a-v1',
         'stim/greebles/m4~46-a-v1',
         'stim/greebles/m4~47-a-v1',
         'stim/greebles/m4~48-a-v1',
         'stim/greebles/m4~49-a-v1',
         'stim/greebles/m5~51-a-v1',
         'stim/greebles/m5~52-a-v1',
         'stim/greebles/m5~53-a-v1',
         'stim/greebles/m5~54-a-v1',
         'stim/greebles/m5~55-a-v1',
         'stim/greebles/m5~56-a-v1']
        greeble_model = np.random.choice(greeble_list) #choose initial greeble
      Begin Routine:
        startTime = globalClock.getTime()

        curr_opacity=0
        correct_resp="d"
        if np.random.choice(["same","different"])=="same": #if we are showing the same greeble
            correct_resp="s"
        else: #choose a new greeble
            new_greeble_candidate = np.random.choice(greeble_list)
            if new_greeble_candidate==greeble_model: #1/80 chance to choose the same greeble
                new_greeble_candidate = np.random.choice(greeble_list)
            if new_greeble_candidate==greeble_model:
                new_greeble_candidate = np.random.choice(greeble_list)
            greeble_model = new_greeble_candidate


        opacity_after_peak = False
      Each Frame:
        if curr_opacity>=1:
            opacity_after_peak = True
            curr_opacity=1

        if not opacity_after_peak:
            curr_opacity+=1/20 #this means opacity will change by frame rate! for 144
            #1/40 with 144 hz means that after 40/144=278 ms we reach maximum opacity

        if t>0.7:#globalClock.getTime()-startTime>0.7
            curr_opacity=curr_opacity-1/20
    ImageComponent greeble_img_2
      image [set every repeat] = $greeble_model
      opacity [set every frame] = curr_opacity
      ori [set every repeat] = np.random.choice(np.arange(-30,30))
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine trial_nonword
    ImageComponent bg_image
      image [set every repeat] = $"stim/backgrounds/"+curr_background+".jpg"
      size = (1.5, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
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    KeyboardComponent nback_ans
      allowedKeys = 'k','d'
      correctAns = $correct_resp
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.
      stopVal [duration (s)] = SOA
      store = first key
      storeCorrect = True
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    SoundComponent aud_stim
      sound [set every repeat] = $"stim/auditory/pseudowords/"+auditory_nonword
      startVal [time (s)] = curr_auditory_onset
      stopVal [duration (s)] = .6
      volume [set every repeat] = aud_volume
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    CodeComponent set_correct
      Code Type = Both
      Begin Experiment:
        direction=-1 #changes every trial
        curr_x_loc,curr_y_loc = [direction*0.4,0]
      Begin JS Routine:
        [curr_x_loc, curr_y_loc] = [0, 0];
        startTime = globalClock.getTime();
        curr_opacity = 0;
        opacity_after_peak = false;
      Begin Routine:
        direction=(-1)*direction
        curr_x_loc,curr_y_loc = [direction*0.4,0]
        y_gradient = np.random.choice([.003,.001,0,-.003,-.001])
        startTime = globalClock.getTime()
        expInfo["auditory_prime_name"] = ""

        if play_catch:
            expInfo["auditory_target_name"] = "catch"
        else:
            expInfo["auditory_target_name"] = ""
        curr_opacity=0
        opacity_after_peak = False
      Each Frame:
        #if curr_opacity>=1:
        #    opacity_after_peak = True
        #    curr_opacity=1
        #
        #if not opacity_after_peak:
        #    curr_opacity+=1/(frameRate*fadeInTime) #this means opacity will change by frame rate! for 144
        #    #1/40 with 144 hz means that after 40/144=278 ms we reach maximum opacity
        #
        #if t >= (presentationTime-fadeOutTime): #globalClock.getTime()-startTime>0.7
        #    curr_opacity=curr_opacity-1/(frameRate*fadeOutTime)
        #advancement pace - 0.2 per presentationTime seconds, 0.2/(framerate*presentation time) per frame

        if t <= (presentationTime/2):
            curr_x_loc=curr_x_loc+direction*0.125/(frameRate*presentationTime)
            curr_y_loc=curr_y_loc-y_gradient
        else:
            curr_x_loc=curr_x_loc-direction*0.125/(frameRate*presentationTime)
            curr_y_loc=curr_y_loc+y_gradient
      Each JS Frame:
        if ((curr_opacity >= 1)) {
            opacity_after_peak = true;
            curr_opacity = 1;
        }
        if ((! opacity_after_peak)) {
            curr_opacity += (1 / (frameRate * fadeInTime));
        }
        if ((t >= (presentationTime - fadeOutTime))) {
            curr_opacity = (curr_opacity - (1 / (frameRate * fadeOutTime)));
        }
      End JS Routine:
        if (nback_ans.corr) {
            n_correct += 1;
            if ((correct_resp === "d")) {
                n_diff_correct += 1;
            }
        }
      End Routine:
        n_trials_performed=n_trials_performed+1
        if nback_ans.corr:
            n_correct+=1
            trial_feedback_txt = "V"
            if (correct_resp=="d"):
                n_diff_correct+=1
        else:
            trial_feedback_txt="X"

        if after_break:
            trial_feedback_txt=""
            after_break=False #show feedback next time
        total_trials=total_trials+1
    ImageComponent greeble_img
      durationEstim = 0.35
      image [set every repeat] = $greeble_model
      ori [set every repeat] = np.random.choice(np.arange(-30,30))+greeble_oreintation
      pos [set every frame] = (curr_x_loc,curr_y_loc)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = presentationTime
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    SoundComponent aud_stim_reverse
      sound [set every repeat] = $"stim/auditory/reverse_pseudowords/"+reverse_nonword
      startVal [time (s)] = curr_auditory_onset+0.6
      stopVal [duration (s)] = .6
      volume [set every repeat] = aud_volume
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    ImageComponent curtain_img
      durationEstim = 1.35
      image = stim\curtain_1.png
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
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    TextComponent total_correct_txt
      letterHeight = 0.05
      pos = (0, -.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
      text [set every frame] = $"Total correct: \n"+str(n_correct)
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    TextComponent trial_feedback
      color [set every repeat] = $(1-2*nback_ans.corr, -1+2*nback_ans.corr, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trial_feedback_txt
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    TextComponent text_word
      color = black
      disabled = True
      languageStyle = RTL
      letterHeight = 0.05
      pos [set every repeat] = (curr_x_loc/2,curr_y_loc)
      startEstim = .5
      startVal [time (s)] = presentationTime
      stopVal [duration (s)] = text_duration
      text [set every repeat] = $random_word
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  Routine trial_target
    ImageComponent bg_image_2
      image [set every repeat] = $"stim/backgrounds/"+curr_background
      size = (1.5, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
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    KeyboardComponent nback_ans_target
      allowedKeys = 'k','d'
      correctAns = $correct_resp
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.
      stopVal [duration (s)] = SOA
      store = first key
      storeCorrect = True
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    SoundComponent aud_stim_target
      sound [set every repeat] = $"stim/auditory/targets/"+auditory_target_file
      startVal [time (s)] = curr_auditory_onset
      stopVal [duration (s)] = .6
      volume [set every repeat] = aud_volume*0.8
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    CodeComponent set_correct_target
      Code Type = Both
      Begin Experiment:
        #greeble_list = ['stim/greebles/f1~11-a-v1',
        # 'stim/greebles/f1~12-a-v1',
        # 'stim/greebles/f1~13-a-v1',
        # 'stim/greebles/f1~14-a-v1',
        # 'stim/greebles/f1~15-a-v1',
        # 'stim/greebles/f1~16-a-v1',
        # 'stim/greebles/f2~21-a-v1',
        # 'stim/greebles/f2~22-a-v1',
        # 'stim/greebles/f2~23-a-v1',
        # 'stim/greebles/f2~24-a-v1',
        # 'stim/greebles/f2~25-a-v1',
        # 'stim/greebles/f2~26-a-v1',
        # 'stim/greebles/f3~31-a-v1',
        # 'stim/greebles/f3~310-a-v1',
        # 'stim/greebles/f3~32-a-v1',
        # 'stim/greebles/f3~33-a-v1',
        # 'stim/greebles/f3~34-a-v1',
        # 'stim/greebles/f3~35-a-v1',
        # 'stim/greebles/f3~36-a-v1',
        # 'stim/greebles/f3~37-a-v1',
        # 'stim/greebles/f3~38-a-v1',
        # 'stim/greebles/f3~39-a-v1',
        # 'stim/greebles/f4~41-a-v1',
        # 'stim/greebles/f4~42-a-v1',
        # 'stim/greebles/f4~43-a-v1',
        # 'stim/greebles/f4~44-a-v1',
        # 'stim/greebles/f4~45-a-v1',
        # 'stim/greebles/f4~46-a-v1',
        # 'stim/greebles/f5~51-a-v1',
        # 'stim/greebles/f5~510-a-v1',
        # 'stim/greebles/f5~52-a-v1',
        # 'stim/greebles/f5~53-a-v1',
        # 'stim/greebles/f5~54-a-v1',
        # 'stim/greebles/f5~55-a-v1',
        # 'stim/greebles/f5~56-a-v1',
        # 'stim/greebles/f5~57-a-v1',
        # 'stim/greebles/f5~58-a-v1',
        # 'stim/greebles/f5~59-a-v1',
        # 'stim/greebles/m1~11-a-v1',
        # 'stim/greebles/m1~110-a-v1',
        # 'stim/greebles/m1~12-a-v1',
        # 'stim/greebles/m1~13-a-v1',
        # 'stim/greebles/m1~14-a-v1',
        # 'stim/greebles/m1~15-a-v1',
        # 'stim/greebles/m1~16-a-v1',
        # 'stim/greebles/m1~17-a-v1',
        # 'stim/greebles/m1~18-a-v1',
        # 'stim/greebles/m1~19-a-v1',
        # 'stim/greebles/m2~21-a-v1',
        # 'stim/greebles/m2~210-a-v1',
        # 'stim/greebles/m2~22-a-v1',
        # 'stim/greebles/m2~23-a-v1',
        # 'stim/greebles/m2~24-a-v1',
        # 'stim/greebles/m2~25-a-v1',
        # 'stim/greebles/m2~26-a-v1',
        # 'stim/greebles/m2~27-a-v1',
        # 'stim/greebles/m2~28-a-v1',
        # 'stim/greebles/m2~29-a-v1',
        # 'stim/greebles/m3~31-a-v1',
        # 'stim/greebles/m3~32-a-v1',
        # 'stim/greebles/m3~33-a-v1',
        # 'stim/greebles/m3~34-a-v1',
        # 'stim/greebles/m3~35-a-v1',
        # 'stim/greebles/m3~36-a-v1',
        # 'stim/greebles/m4~41-a-v1',
        # 'stim/greebles/m4~410-a-v1',
        # 'stim/greebles/m4~42-a-v1',
        # 'stim/greebles/m4~43-a-v1',
        # 'stim/greebles/m4~44-a-v1',
        # 'stim/greebles/m4~45-a-v1',
        # 'stim/greebles/m4~46-a-v1',
        # 'stim/greebles/m4~47-a-v1',
        # 'stim/greebles/m4~48-a-v1',
        # 'stim/greebles/m4~49-a-v1',
        # 'stim/greebles/m5~51-a-v1',
        # 'stim/greebles/m5~52-a-v1',
        # 'stim/greebles/m5~53-a-v1',
        # 'stim/greebles/m5~54-a-v1',
        # 'stim/greebles/m5~55-a-v1',
        # 'stim/greebles/m5~56-a-v1']
        #greeble_model = np.random.choice(greeble_list) #choose initial greeble
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin JS Routine:
        startTime = globalClock.getTime();
        expInfo["auditory_target_name"] = auditory_target_name;
        curr_opacity = 0;
        opacity_after_peak = false;
        played_targets.append(auditory_target_name);
      Begin Routine:
        startTime = globalClock.getTime()
        #set target word
        expInfo["auditory_target_name"] = auditory_target_name
        auditory_target_name_for_test=auditory_target_name
        curr_opacity=0

        #else: #choose a new greeble
        #    new_greeble_candidate = np.random.choice(greeble_list)
        #    if new_greeble_candidate==greeble_model: #1/80 chance to choose the same greeble
        #        new_greeble_candidate = np.random.choice(greeble_list)
        #    if new_greeble_candidate==greeble_model:
        #        new_greeble_candidate = np.random.choice(greeble_list)
        #    greeble_model = new_greeble_candidate
        #
        direction=(-1)*direction
        curr_x_loc,curr_y_loc = [direction*0.4,0]
        y_gradient = np.random.choice([.003,.001,0,-.003,-.001])
        startTime = globalClock.getTime()

        curr_opacity=0

        opacity_after_peak = False

        played_targets.append(auditory_target_name)
      Each Frame:
        #if curr_opacity>=1:
        #    opacity_after_peak = True
        #    curr_opacity=1
        #
        #if not opacity_after_peak:
        #    curr_opacity+=1/(frameRate*fadeInTime) #this means opacity will change by frame rate! for 144
        #    #1/40 with 144 hz means that after 40/144=278 ms we reach maximum opacity
        #
        #if t >= (presentationTime-fadeOutTime): #globalClock.getTime()-startTime>0.7
        #    curr_opacity=curr_opacity-1/(frameRate*fadeOutTime)


        if t <= (presentationTime/2):
            curr_x_loc=curr_x_loc+direction*0.125/(frameRate*presentationTime)
            curr_y_loc=curr_y_loc-y_gradient
        else:
            curr_x_loc=curr_x_loc-direction*0.125/(frameRate*presentationTime)
            curr_y_loc=curr_y_loc+y_gradient
      Each JS Frame:
        if ((curr_opacity >= 1)) {
            opacity_after_peak = true;
            curr_opacity = 1;
        }
        if ((! opacity_after_peak)) {
            curr_opacity += (1 / (frameRate * fadeInTime));
        }
        if ((t >= (presentationTime - fadeOutTime))) {
            curr_opacity = (curr_opacity - (1 / (frameRate * fadeOutTime)));
        }
        if ((t <= (presentationTime / 2))) {
            curr_x_loc = (curr_x_loc + ((direction * 0.2) / (frameRate * presentationTime)));
            curr_y_loc = (curr_y_loc - y_gradient);
        } else {
            curr_x_loc = (curr_x_loc - ((direction * 0.2) / (frameRate * presentationTime)));
            curr_y_loc = (curr_y_loc + y_gradient);
        }
      End JS Routine:
        if (nback_ans_target.corr) {
            n_correct += 1;
            if ((correct_resp === "d")) {
                n_diff_correct += 1;
            }
        }
      End Routine:
        nback_ans.corr=nback_ans_target.corr
        n_trials_performed=n_trials_performed+1

        if nback_ans.corr:
            n_correct+=1
            trial_feedback_txt = "V"
            if (correct_resp=="d"):
                n_diff_correct+=1
        else:
            trial_feedback_txt="X"
        total_trials=total_trials+1
        play_target=0
    ImageComponent greeble_img_target
      durationEstim = 0.35
      image [set every repeat] = $greeble_model
      ori [set every repeat] = np.random.choice(np.arange(-30,30))+greeble_oreintation
      pos [set every frame] = (curr_x_loc,curr_y_loc)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = presentationTime
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    SoundComponent aud_stim_reverse_2
      sound [set every repeat] = $"stim/auditory/reverse_pseudowords/"+reverse_nonword
      startVal [time (s)] = curr_auditory_onset+0.6
      stopVal [duration (s)] = 0.6
      volume [set every repeat] = aud_volume
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    ImageComponent curtain_img_2
      durationEstim = 1.4
      image = stim\curtain_1.png
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
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    TextComponent total_correct_txt_2
      color [set every frame] = white
      letterHeight = 0.05
      pos = (0, -.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
      text [set every frame] = $"Total correct: \n"+str(n_correct)
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    TextComponent trial_feedback_2
      color [set every repeat] = $(1-2*nback_ans.corr, -1+2*nback_ans.corr, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trial_feedback_txt
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    TextComponent text_word_2
      color = black
      disabled = True
      languageStyle = RTL
      letterHeight = 0.05
      pos [set every repeat] = (curr_x_loc/2,curr_y_loc)
      startEstim = .5
      startVal [time (s)] = presentationTime
      stopVal [duration (s)] = text_duration
      text [set every repeat] = $random_word
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  Routine set_trial_type
    CodeComponent set_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        former_trial_is_target=0
        play_catch=0
        play_target=0
        play_test=0
        play_test_next=0
        trial_feedback_txt=""
        auditory_target_name="zz"
        is_first_round=True

        #set greebles
        greeble_list = [ 'stim/greebles/f3~310-a-v1.tif',
         'stim/greebles/f3~32-a-v1.tif',
         'stim/greebles/f3~33-a-v1.tif',
         'stim/greebles/f3~34-a-v1.tif',
         'stim/greebles/f3~35-a-v1.tif',
         'stim/greebles/f3~36-a-v1.tif',
         'stim/greebles/f3~37-a-v1.tif',
         'stim/greebles/f3~38-a-v1.tif',
         'stim/greebles/f3~39-a-v1.tif',
         'stim/greebles/f4~41-a-v1.tif',
         'stim/greebles/f4~42-a-v1.tif',
         'stim/greebles/f4~43-a-v1.tif',
         'stim/greebles/f4~44-a-v1.tif',
         'stim/greebles/f4~45-a-v1.tif',
         'stim/greebles/f4~46-a-v1.tif',
         'stim/greebles/f5~51-a-v1.tif',
         'stim/greebles/f5~510-a-v1.tif',
         'stim/greebles/f5~52-a-v1.tif',
         'stim/greebles/f5~53-a-v1.tif',
         'stim/greebles/f5~54-a-v1.tif',
         'stim/greebles/f5~55-a-v1.tif',
         'stim/greebles/f5~56-a-v1.tif',
         'stim/greebles/f5~57-a-v1.tif',
         'stim/greebles/f5~58-a-v1.tif',
         'stim/greebles/f5~59-a-v1.tif',
         'stim/greebles/m1~11-a-v1.tif',
         'stim/greebles/m1~110-a-v1.tif',
         'stim/greebles/m1~12-a-v1.tif',
         'stim/greebles/m1~13-a-v1.tif',
         'stim/greebles/m1~14-a-v1.tif',
         'stim/greebles/m1~15-a-v1.tif',
         'stim/greebles/m1~16-a-v1.tif',
         'stim/greebles/m1~17-a-v1.tif',
         'stim/greebles/m1~18-a-v1.tif',
         'stim/greebles/m1~19-a-v1.tif',
         'stim/greebles/m2~21-a-v1.tif',
         'stim/greebles/m2~210-a-v1.tif',
         'stim/greebles/m2~22-a-v1.tif',
         'stim/greebles/m2~23-a-v1.tif',
         'stim/greebles/m2~24-a-v1.tif',
         'stim/greebles/m2~25-a-v1.tif',
         'stim/greebles/m2~26-a-v1.tif',
         'stim/greebles/m2~27-a-v1.tif',
         'stim/greebles/m2~28-a-v1.tif',
         'stim/greebles/m2~29-a-v1.tif',
         'stim/greebles/m3~31-a-v1.tif',
         'stim/greebles/m3~32-a-v1.tif',
         'stim/greebles/m3~33-a-v1.tif',
         'stim/greebles/m3~34-a-v1.tif',
         'stim/greebles/m3~35-a-v1.tif',
         'stim/greebles/m3~36-a-v1.tif',
         'stim/greebles/m4~41-a-v1.tif',
         'stim/greebles/m4~410-a-v1.tif',
         'stim/greebles/m4~42-a-v1.tif',
         'stim/greebles/m4~43-a-v1.tif',
         'stim/greebles/m4~44-a-v1.tif',
         'stim/greebles/m4~45-a-v1.tif',
         'stim/greebles/m4~46-a-v1.tif',
         'stim/greebles/m4~47-a-v1.tif',
         'stim/greebles/m4~48-a-v1.tif',
         'stim/greebles/m4~49-a-v1.tif',
         'stim/greebles/m5~51-a-v1.tif',
         'stim/greebles/m5~52-a-v1.tif',
         'stim/greebles/m5~53-a-v1.tif',
         'stim/greebles/m5~54-a-v1.tif',
         'stim/greebles/m5~55-a-v1.tif',
         'stim/greebles/m5~56-a-v1.tif']
        greeble_model = np.random.choice(greeble_list) #choose initial greeble
      Begin Routine:
        trial_type=np.random.choice(["up","up","up","down","down"])
        expInfo["subj_resp.correct"]=""
        old_nonwords= [reverse_nonword,auditory_nonword]
        reverse_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for mask
        if reverse_nonword==old_nonwords[0]:
            reverse_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for trial onset
        auditory_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for trial onset
        if auditory_nonword==old_nonwords[1]:
            auditory_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for trial onset


        if trial_type=="up": #if we are showing the same greeble
            correct_resp="k" #probability for aud_target after "same"
            greeble_oreintation=0
        #    target_probability=0.08
        if (trial_type=="down"):
            same_streak=0
            greeble_oreintation=180
            correct_resp="d"
        #    target_probability=0.24 #probability for aud_target after "different"
        new_greeble_candidate = np.random.choice(greeble_list)#choose a new greeble

        #if version=="ask_per_target":
        #    play_catch=0
        #    play_prime=0
        #    play_target=0
        #    play_test=0
        #    if (play_target|play_catch)&(former_trial_is_target==0): #before setting the new trial, save whther the former is a target trial
        #        former_trial_is_target=1
        #        play_test=1
        #    else: #if the former trial was not a target
        #        former_trial_is_target=0
        #        play_test=0
        #    if int(target_trials[i])==1:#unless this trial is target and then never ask immediately
        #        former_trial_is_target=0
        #        play_test=0

        if target_trials[i]=="target": # decide if we ask on catch trial or target
            curr_cond=block_conditions_list[target_idx_in_block]
            if curr_cond=="catch":
                play_catch=1
                play_target=0
                expInfo["valence_cond"]="catch"
                category_resp_correct_ans="nothing"
                ans1,ans2,ans3=np.random.choice(possible_answers,3,replace=0)
                target_idx_in_block+=1
            else:
                play_catch=0
                play_target=1
                auditory_target_name = all_targets_df["target_eng"].iloc[-1]
                auditory_target_file = auditory_target_name+ ".ogg"
                #get the answers for objective question
                answers = get_answers(all_targets_df,auditory_target_name)
                ans1,ans2,ans3,category_resp_correct_ans=answers

                all_targets_df=all_targets_df.head(-1) #don't use this row again
                target_idx_in_block+=1
            expInfo["target_cat"]=curr_cond

        else:# if not a target
            expInfo["target_cat"]="nonword"

        if target_trials[i]=="test":
            play_test=1
        else:
            play_test=0
        #create onset jitter
        curr_auditory_onset = max_jitter*np.random.uniform()
        ##sample random word to show
        #random_word=np.random.choice(word_bank,1)[0]
        #expInfo['random_word']=random_word
        #save trial data
        i+=1
        expInfo['i']=i
        expInfo['target_idx_in_block']=target_idx_in_block
      End Routine:
        if i==nTrialsInBlock:
            trials_loop.finished=True
    TextComponent test
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [frame N] = 0
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  Routine set_block
    CodeComponent set_block_code
      Code Type = Auto->JS
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      Begin Experiment:
        #exp_params
        import pandas as pd
        def eng_to_heb(df,wordlist):
            for i in range(len(wordlist)):
                index_of_interest=df["target_eng"]==wordlist[i]
                wordlist[i]=df["target_heb"][index_of_interest].item()
            return list(wordlist)

        def get_answers(df,word):
            index_of_interest=np.array(df["target_eng"])==word
            if np.sum(index_of_interest)!=1:
                return "nothing"
            correct=df["correct"][index_of_interest].iloc[0]
            answers=[df["option1"][index_of_interest].iloc[0],df["option2"][index_of_interest].iloc[0],df["option3"][index_of_interest].iloc[0]]
            keys=["a","g","l"]
            key = keys[np.where(np.array(answers)==np.array(correct))[0][0]]
            answers.append(key)
            return answers
        expInfo["exp_version"]="perceptual"
        subject_num=int(expInfo["subject num"])
        run=int(expInfo["run"])
        version="ask_per_target" # "ask_per_target" "ask_per_block"
        n_blocks=6 #including training blocks
        training_blocks = 3
        if run==2: #exclude training if it's the 2nd run
            n_blocks=4
            training_blocks=1
        nTrialsInBlock=18
        #text_duration=0.35
        nTrialsAfterTraining=215
        n_correct=0 #count each block for feedback
        total_trials=1 #counter
        curr_block=0
        same_streak=0 #making sure that there are no more than 10 trials without changes
        #catch_probability=0.4 #for each trial marked for awareness test
        frameRate = 60 #Hz
        fadeInTime = 0.1 #seconds
        fadeOutTime = 0.1
        presentationTime = 0.9  #seconds
        presentationTimeAfterTraining = 0.600
        targets_in_previous=0
        target_count_randomizer = [19,19,19] # number of trials in a block, multiple of length(conditions)
        total_probes=np.sum(target_count_randomizer)
        SOA=1.9
        SOA_AfterTraining = 1.4
        max_jitter=0.15 #seconds


        conditions = np.repeat(["catch","real_word","real_word"],total_probes/3)
        np.random.shuffle(conditions)

        print(subject_num)
        np.random.seed(subject_num) # constant order per person for subjects to get different words in the two parts
        all_targets_df=pd.read_csv("emotional_heb_words_sub.csv").sample(frac=1)[:39]
        print(len(all_targets_df))
        #targets_translation=pd.read_csv("words_hebrew_exp1_translation.csv").sample(frac=1)
        reverse_nonwords=pd.read_csv("reverse_nonwords.csv")
        reverse_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for mask
        auditory_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for mask

        possible_answers = ["פעולה","אובייקט קטן","תחושה","אירוע","מזון","אדם","אובייקט גדול","תיאור","חיה","סימן"]

        backgrounds = ["desert_1.jpg","forest_1.jpg","city_1.jpg","jungle_1.jpg","sea_1.jpg","mountains_1.jpg","desert_2.jpg","jungle_2.jpg","sea_2.jpg","mountains_2.jpg"]
        curr_background=np.random.choice(backgrounds)
      Begin Routine:
        #n_correct=0 #count each block for feedback
        n_diff_correct=0 #count each block for feedback
        q_idx=0
        target_idx_in_block=0
        i=0
        count_visual_targets = 0
        n_trials_performed=0
        target_trials = np.zeros(nTrialsInBlock).astype(str)
        expInfo["curr_block"]=curr_block
        n_correct=0 #zero training success per block

        if curr_block>0:
            aud_volume=1

        if curr_block==training_blocks-1: #training with test
            presentationTime=presentationTimeAfterTraining
            SOA=SOA_AfterTraining

        if curr_block>training_blocks-1: #if training is done
            nTrialsInBlock=nTrialsAfterTraining
            #set targets
            expInfo['correct_answer'] = ''
            expInfo['question_word'] = ''
            if version=="ask_per_target":
                target_intervals=[10000]
                targets_in_block = target_count_randomizer[curr_block-training_blocks];
                #(minimum=7) sampled repeatedly from an exponential distribution
                # sample intervals until a sample is recieved with the last target 1 trial before ending the block
                block_conditions_list = conditions[targets_in_previous:(targets_in_previous+targets_in_block)]
                np.random.shuffle(block_conditions_list)
                expInfo["block_conditions_list"]=block_conditions_list
                while(np.sum(target_intervals)>(nTrialsInBlock-2)):
                    target_trials = np.zeros(nTrialsInBlock).astype(str)
                    exponential_dist = 7+np.random.exponential(7,2000)
                    target_intervals = np.random.choice(exponential_dist, targets_in_block).astype(int)
                target_trials[np.cumsum(target_intervals)] = "target"
                target_trials[np.cumsum(target_intervals)+1] = "test"
        if curr_block==0: #in the first block - no sound
            aud_volume=0
            targets_in_block=0

        targets_in_previous=targets_in_previous+targets_in_block
        n_targets = sum(target_trials=='target')
        #if curr_block==0:
        #    aud_volume=0
        #else:
        #    aud_volume=0.5

        played_targets = [] #will add targets name for awareness test

        curr_block=curr_block+1

        curr_background=np.random.choice(backgrounds)
        background_sound = sound.Sound("stim\\auditory\\bubbles_bg_music.ogg", stereo=True, hamming=True,
            name='background_sound')
      Each Frame:
        background_sound.stop()
      End Routine:
        background_sound.play()
    TextComponent block_onset_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine awareness_test
    TextComponent awareness_q3
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Did you hear this word?
        Yes/No (Y/N)
    KeyboardComponent awareness_ans3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.
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    TextComponent word_txt
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 0
      text [set every repeat] = $current_question_word
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    CodeComponent set_q_target
      Code Type = Auto->JS
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      Begin Experiment:
        current_question_word=""
      Begin Routine:
        if (len(played_targets)>0) & (is_target_q[q_idx]==1):
            #if you ask on a target that appear and not on a distractor
            current_question_word = played_targets.pop() #a list size n_targets in the block (1-3)
            expInfo['correct_answer'] = 'y'
        else:
            current_question_word = never_played_targets.pop() #a list size total possible targets (1-3)
            expInfo['correct_answer'] = 'n'


        expInfo['question_word'] = current_question_word
        q_idx+=1
  Routine set_volume
    TextComponent set_vol_msg
      languageStyle = RTL
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        לנסיינ/ית - בדיקת סאונד
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      sound [set every repeat] = stim\auditory\non1_rev_rep.wav
      startVal [time (s)] = 0.0
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    SoundComponent background_sound
      sound = stim\auditory\bubbles_bg_music.ogg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine trial_nosound
    TextComponent text_stim_4
      disabled = True
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.15
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $visual_word
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    KeyboardComponent nback_ans_training
      allowedKeys = 's','d'
      correctAns = $correct_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.
      stopVal [duration (s)] = SOA
      storeCorrect = True
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    CodeComponent set_correct__training
      Code Type = Auto->JS
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      Begin Experiment:
        i=0
      Begin Routine:
        startTime = globalClock.getTime()

        curr_opacity=0
        correct_resp="d"
        if np.random.choice(["same","different"])=="same": #if we are showing the same greeble
            correct_resp="s"
        else: #choose a new greeble
            new_greeble_candidate = np.random.choice(greeble_list)
            if new_greeble_candidate==greeble_model: #1/80 chance to choose the same greeble
                new_greeble_candidate = np.random.choice(greeble_list)
            if new_greeble_candidate==greeble_model:
                new_greeble_candidate = np.random.choice(greeble_list)
            greeble_model = new_greeble_candidate

        i+=1
        opacity_after_peak = False
      Each Frame:
        if curr_opacity>=1:
            opacity_after_peak = True
            curr_opacity=1

        if not opacity_after_peak:
            curr_opacity+=1/(frameRate*fadeInTime) #this means opacity will change by frame rate! for 144
            #1/40 with 144 hz means that after 40/144=278 ms we reach maximum opacity

        if t >= (presentationTime-fadeOutTime): #globalClock.getTime()-startTime>0.7
            curr_opacity=curr_opacity-1/(frameRate*fadeOutTime)
      End Routine:
        if nback_ans_training.corr:
            n_correct+=1

        if i==nTrialsInBlock:
            taining.finished=True
    ImageComponent greeble_img__training
      durationEstim = 0.75
      image [set every repeat] = $greeble_model+".tif"
      opacity [set every frame] = curr_opacity
      ori [set every repeat] = np.random.choice(np.arange(-30,30))
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = presentationTime
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  Routine end_first_round
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        is_first_round=False
    TextComponent end_block_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press space to start the next round.
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    KeyboardComponent end_block_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
    TextComponent instructions_3
      languageStyle = RTL
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        הצורות יופיעו ברצף ובמהירות, אחת אחרי השניה, מעבר לריבוע.
         ניתן להגיב בכל פעם עד שמופיעה הצורה הבאה.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine awareness_test_subj
  Routine end_exp
    TextComponent end_text
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        תודה על ההשתתפות
        אנא קרא/י לנסיינ/ית
    KeyboardComponent end_exp_btn
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine awareness_obj_test
    TextComponent obj_q_txt
      languageStyle = RTL
      letterHeight = 0.04
      startVal [time (s)] = 0.4
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      text:
         האם שמעת מילה בעלת משמעות
         באחד הסיבובים האחרונים?

        אם כן, בחר/י את המילה בעזרת המקשים 1-3.
        אם לא שמעת , נס/י לנחש כמיטב יכולתך.
    KeyboardComponent obj_resp
      allowedKeys = '1','2','3'
      correctAns = $correct_resp_awareness_obj
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    CodeComponent set_correct_test
      Code Type = Auto->JS
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      Begin Routine:
        background_sound.stop()
        words=[auditory_target_name,never_played_targets[-1],never_played_targets[-2]]
        never_played_targets=never_played_targets[:-2] #remove from list
        if auditory_target_name=="": #if it's a catch question remove another word
            words[0]=never_played_targets[-1]
            auditory_target_name=never_played_targets[-1]
            never_played_targets=never_played_targets[:-1]
        np.random.shuffle(words)
        correct_resp_awareness_obj=1+np.where(np.array(words)==auditory_target_name)[0][0]
        expInfo["correct_resp_awareness_obj"]=correct_resp_awareness_obj
        words=eng_to_heb(all_targets_df,words)
        expInfo["words_in_q"]=words
      End Routine:
        auditory_target_name=""
        background_sound.play()
    TextComponent opt1
      languageStyle = RTL
      letterHeight = 0.035
      pos = (-.2, -0.2)
      startVal [time (s)] = 0.4
      text [set every repeat] = $"1    \n"+words[0]
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    TextComponent opt2
      languageStyle = RTL
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.4
      text [set every repeat] = $"2    \n"+words[1]
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    TextComponent opt3
      languageStyle = RTL
      letterHeight = 0.035
      pos = (0.2, -0.2)
      startVal [time (s)] = 0.4
      text [set every repeat] = $"3    \n"+words[2]
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  Routine awareness_subj_test
    TextComponent subj_q_txt
      languageStyle = RTL
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.4
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      text:
        האם שמעת מילה בעלת משמעות ב-5 השניות האחרונות?
        נא להשיב בעזרת מקשי המקלדת
    KeyboardComponent subj_resp
      allowedKeys = '1','2','3','0'
      correctAns = $correct_resp_awareness_subj
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      store = first key
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    CodeComponent set_correct_test_2
      Code Type = Auto->JS
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      Begin Routine:
        #background_sound.stop()
        after_break=True #set that to not show feedback after pausing

        if curr_cond=="catch":
            expInfo["subj_resp.correct_resp"]=0.5 #get 0 or 1 as correct
        else:
            expInfo["subj_resp.correct_resp"]=2.5 #get 2 or 3 as correct
    ImageComponent PAS_inst
      image = PAS_img.png
      pos = (0, -0.15)
      size = (1,0.129)
      startVal [time (s)] = 0.4
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  Routine break_screen
    CodeComponent set_block_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        msg=""
        after_break=True #set that to not show feedback after pausing
      Begin Routine:
        #msg = "In the last round, you got %i/%f correct" %(n_correct,int(nTrialsInBloc
        #msg = "In the last round, you got %i/%f shape changes correct" %(n_diff_correct,count_visual_targets)
        #msg2 = "Overall success rate: %i percent" %(100*n_correct/(nTrialsInBlock-1))
        msg=f"Break\nWell done! Your success rate: {np.round(100*n_correct/n_trials_performed,2)}% of shapes\n"
        msg2 = "Remember:\n upright shape - K,\n inverted shape - D"
        background_sound.stop()
        #set awareness test question targets and distractors
        #is_target_q = np.zeros(5)
        #if (version=="ask_per_block") & (n_targets>0):
        #    is_target_q[(np.random.choice(5,int(n_targets),replace=False))]=1 #change n_targets of the questions to include a target word that was heard
        #np.random.shuffle(played_targets) #targets in awareness test are presented in random order
        #
        #
      End Routine:
        #if (len(played_targets)>0) & (is_target_q[q_idx]==1):
        #    #if you ask on a target that appear and not on a distractor
        #    current_question_word = played_targets.pop() #a list size n_targets in the block (1-3)
        #else:
        #    current_question_word = never_played_targets.pop() #a list size total possible targets (1-3)
        #
    TextComponent block_feed_text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $msg+"\n"+msg2
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    KeyboardComponent continue_to_Q
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_to_continue
      letterHeight = 0.04
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press 'space' to continue
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  Routine category_Q
    TextComponent subj_q_txt_2
      languageStyle = RTL
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.4
      text = האם שמעת מילה בעלת משמעות באחד משני הסיבובים האחרונים?
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    KeyboardComponent subj_resp_2
      allowedKeys = '1','2','3','0'
      correctAns = $correct_resp_awareness_subj
      forceEndRoutine = True
      startVal [time (s)] = 0.4
      storeCorrect = True
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    CodeComponent set_correct_test_3
      Code Type = Auto->JS
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      Begin Routine:
        #background_sound.stop()

        if play_test:
            correct_resp_awareness_subj="3"
        if play_catch:
            correct_resp_awareness_subj="0"
    ImageComponent PAS_inst_2
      image = PAS_img.png
      pos = (0, -0.15)
      size = (1,0.15)
      startVal [time (s)] = 0.4
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  Routine category_question
    TextComponent category_q_txt
      languageStyle = RTL
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.1
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      text:
        מבין הקטגוריות הבאות,
        מה מתאר את המילה שהושמעה באופן הטוב ביותר?

        במידה ואינך בטוח/ה או שלא הושמעה מילה, יש לבחור באקראי
         נא להשיב בעזרת מקשי המקלדת
    KeyboardComponent category_resp
      allowedKeys = "a","g","l"
      correctAns = $category_resp_correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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    CodeComponent set_correct_test_4
      Code Type = Auto->JS
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      Begin Routine:
        background_sound.stop()
        #words=[auditory_target_name,never_played_targets[-1],never_played_targets[-2]]
        #never_played_targets=never_played_targets[:-2] #remove from list
        #if auditory_target_name=="": #if it's a catch question remove another word
        #    words[0]=never_played_targets[-1]
        #    auditory_target_name=never_played_targets[-1]
        #    never_played_targets=never_played_targets[:-1]
        #np.random.shuffle(words)
        #correct_resp_awareness_obj=1+np.where(np.array(words)==auditory_target_name)[0][0]
        #expInfo["correct_resp_awareness_obj"]=correct_resp_awareness_obj
        #words=eng_to_heb(all_targets_df,words)
        #expInfo["words_in_q"]=words


        expInfo["ans1"]=ans1
        expInfo["ans2"]=ans2
        expInfo["ans3"]=ans3
        expInfo["category_resp_correct_ans"]=category_resp_correct_ans
      End Routine:
        auditory_target_name=""
        expInfo["auditory_target_name"] = auditory_target_name

        background_sound.play()
    TextComponent options_category
      languageStyle = RTL
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.1
      text = A                     G                        L
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    TextComponent answers_txt
      languageStyle = RTL
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.1
      text [set every repeat] = $ans3+"                 "+ans2+"                 "+ans1
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  Routine fixation_after_test
    TextComponent fixation_txt
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
      text = +
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  Routine instructions_PAS
    TextComponent instructions_2
      languageStyle = RTL
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        לאחר האימון, יושמעו קולות יחד עם המילים.
        הקולות נועדו כדי לדמות סביבה רועשת, שאת השפעתה אנו בוחנים.
        רוב הקולות יהיו צירופי הברות חסרי משמעות, אך מפעם לפעם
        תושמע מילה בעלת משמעות.

        מדי פעם, נשאל אותך האם שמעת מילה בעלת משמעות
         בכמה השניות האחרונות, ובאיזו מילה מדובר.
        שימו לב! מילה בעלת משמעות לעולם לא תתאר שמות (אבי, דני...)
        במילה בעלת משמעות תמיד יהיו לפחות שתי הברות.

        השאלה תמיד תתייחס למילה בעלת המשמעות האחרונה ששמעת.
        לעיתים השאלה תופיע מעט (כמה שניות) אחרי מילה בעלת משמעות, ולעיתים לא
    ImageComponent PAS_inst_pre_exp
      image = PAS_img.png
      pos = (0, -0.25)
      size = (1,0.129)
      startVal [time (s)] = 0.4
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    KeyboardComponent key_resp_PASinst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        background_sound.stop()
  Routine movie_demo
    MovieComponent demo_comp
      No audio = True
      backend = moviepy
      disabled = True
      forceEndRoutine = True
      movie = Demo_subjects.mp4
      size = [1.7,1.7*0.5625]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine trial_prime
    ImageComponent bg_image_3
      image [set every repeat] = $"stim/backgrounds/"+curr_background
      size = (1.5, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
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    KeyboardComponent nback_ans_prime
      allowedKeys = 'k','d'
      correctAns = $correct_resp
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.
      stopVal [duration (s)] = SOA
      store = first key
      storeCorrect = True
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    SoundComponent aud_stim_prime
      sound [set every repeat] = $"stim/auditory/target/"+auditory_prime_file
      startVal [time (s)] = curr_auditory_onset
      stopVal [duration (s)] = .6
      volume [set every repeat] = aud_volume
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    CodeComponent set_correct_prime
      Code Type = Both
      Begin Experiment:
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      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin JS Routine:
        startTime = globalClock.getTime();
        expInfo["auditory_target_name"] = auditory_target_name;
        curr_opacity = 0;
        opacity_after_peak = false;
        played_targets.append(auditory_target_name);
      Begin Routine:
        startTime = globalClock.getTime()
        #set target word
        expInfo["auditory_prime_name"] = auditory_prime_name
        curr_opacity=0

        #else: #choose a new greeble
        #    new_greeble_candidate = np.random.choice(greeble_list)
        #    if new_greeble_candidate==greeble_model: #1/80 chance to choose the same greeble
        #        new_greeble_candidate = np.random.choice(greeble_list)
        #    if new_greeble_candidate==greeble_model:
        #        new_greeble_candidate = np.random.choice(greeble_list)
        #    greeble_model = new_greeble_candidate
        #
        direction=(-1)*direction
        curr_x_loc,curr_y_loc = [direction*0.4,0]
        y_gradient = np.random.choice([.003,.001,0,-.003,-.001])
        startTime = globalClock.getTime()

        curr_opacity=0

        opacity_after_peak = False

        played_targets.append(auditory_prime_name)
      Each Frame:
        #if curr_opacity>=1:
        #    opacity_after_peak = True
        #    curr_opacity=1
        #
        #if not opacity_after_peak:
        #    curr_opacity+=1/(frameRate*fadeInTime) #this means opacity will change by frame rate! for 144
        #    #1/40 with 144 hz means that after 40/144=278 ms we reach maximum opacity
        #
        #if t >= (presentationTime-fadeOutTime): #globalClock.getTime()-startTime>0.7
        #    curr_opacity=curr_opacity-1/(frameRate*fadeOutTime)


        if t <= (presentationTime/2):
            curr_x_loc=curr_x_loc+direction*0.125/(frameRate*presentationTime)
            curr_y_loc=curr_y_loc-y_gradient
        else:
            curr_x_loc=curr_x_loc-direction*0.125/(frameRate*presentationTime)
            curr_y_loc=curr_y_loc+y_gradient
      Each JS Frame:
        if ((curr_opacity >= 1)) {
            opacity_after_peak = true;
            curr_opacity = 1;
        }
        if ((! opacity_after_peak)) {
            curr_opacity += (1 / (frameRate * fadeInTime));
        }
        if ((t >= (presentationTime - fadeOutTime))) {
            curr_opacity = (curr_opacity - (1 / (frameRate * fadeOutTime)));
        }
        if ((t <= (presentationTime / 2))) {
            curr_x_loc = (curr_x_loc + ((direction * 0.2) / (frameRate * presentationTime)));
            curr_y_loc = (curr_y_loc - y_gradient);
        } else {
            curr_x_loc = (curr_x_loc - ((direction * 0.2) / (frameRate * presentationTime)));
            curr_y_loc = (curr_y_loc + y_gradient);
        }
      End JS Routine:
        if (nback_ans_target.corr) {
            n_correct += 1;
            if ((correct_resp === "d")) {
                n_diff_correct += 1;
            }
        }
      End Routine:
        nback_ans.corr=nback_ans_prime.corr

        if nback_ans.corr:
            n_correct+=1
            trial_feedback_txt = "V"
            if (correct_resp=="d"):
                n_diff_correct+=1
        else:
            trial_feedback_txt="X"
        total_trials=total_trials+1
        reverse_nonword=list(reverse_nonwords.sample(1)["auditory_nonword"])[0] #sample a random nonword for mask
    ImageComponent greeble_img_prime
      durationEstim = 0.35
      image [set every repeat] = $greeble_model
      ori [set every repeat] = np.random.choice(np.arange(-30,30))
      pos [set every frame] = (curr_x_loc,curr_y_loc)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = presentationTime
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    SoundComponent aud_stim_prime_reverse
      sound [set every repeat] = $"stim/auditory/reverse_pseudowords/"+reverse_nonword
      startVal [time (s)] = curr_auditory_onset+0.6
      stopVal [duration (s)] = 0.6
      volume [set every repeat] = aud_volume
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    ImageComponent curtain_img_3
      durationEstim = 1.35
      image = stim\curtain_1.png
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
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    TextComponent total_correct_txt_3
      color [set every frame] = white
      letterHeight = 0.05
      pos = (0, -.250)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = SOA
      text [set every frame] = $"Total correct: \n"+str(n_correct)
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    TextComponent trial_feedback_3
      color [set every repeat] = $(1-2*nback_ans.corr, -1+2*nback_ans.corr, -1.0000)
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trial_feedback_txt
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    TextComponent text_prime
      color = black
      disabled = True
      languageStyle = RTL
      letterHeight = 0.05
      pos [set every repeat] = (curr_x_loc/2,curr_y_loc)
      startEstim = .5
      startVal [time (s)] = presentationTime
      stopVal [duration (s)] = text_duration
      text [set every repeat] = $eng_to_heb(targets_translation,[auditory_prime_name])[0]
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  Routine instructions_PAS_2
    TextComponent instructions_4
      languageStyle = RTL
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        המילים לגביהן נשאל תמיד יתארו חיות, מאכלים (מזון) או חפצים דוממים.

        חיה היא כל דבר שיכול לזוז בכוחות עצמו (גם אם עשוי להיות אכיל)
        מזון הוא כל דבר שאינו חיה ושניתן לאכול
        דומם - חפץ בעל קיום פיזי שלא יכול לזוז באופן עצמאי ואינו מזון
        (עשוי להיות גדול או קטן).

         אם שמעת רק מילה אחת בעלת משמעות, השיב/י לגביה
         (מילה עשויה לא להשתייך לאף קטגוריה)
        לעיתים השאלה תופיע מעט (כמה שניות) אחרי מילה בעלת משמעות, ולעיתים לא
    ImageComponent PAS_inst_pre_exp_2
      image = PAS_img.png
      pos = (0, -0.25)
      size = (1,0.129)
      startVal [time (s)] = 0.4
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    KeyboardComponent key_resp_PASinst_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine instructions2
  Routine set_volume
  LoopInitiator blocks_loop loopType="TrialHandler"
    loopType = sequential
    nReps = n_blocks
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    Routine set_block
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = nonwords.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('auditory_nonword', 'adrar.ogg')]),
        OrderedDict([('auditory_nonword', 'adretsa.ogg')]),
        OrderedDict([('auditory_nonword', 'aduta.ogg')]),
        OrderedDict([('auditory_nonword', 'afral.ogg')]),
        OrderedDict([('auditory_nonword', 'aknar.ogg')]),
        OrderedDict([('auditory_nonword', 'amrin.ogg')]),
        OrderedDict([('auditory_nonword', 'anor.ogg')]),
        OrderedDict([('auditory_nonword', 'arlaba.ogg')]),
        OrderedDict([('auditory_nonword', 'asov.ogg')]),
        OrderedDict([('auditory_nonword', 'avat.ogg')]),
        OrderedDict([('auditory_nonword', 'avilav.ogg')]),
        OrderedDict([('auditory_nonword', 'badif.ogg')]),
        OrderedDict([('auditory_nonword', 'bilatz.ogg')]),
        OrderedDict([('auditory_nonword', 'birkon.ogg')]),
        OrderedDict([('auditory_nonword', 'brika.ogg')]),
        OrderedDict([('auditory_nonword', 'byusi.ogg')]),
        OrderedDict([('auditory_nonword', 'dagiru.ogg')]),
        OrderedDict([('auditory_nonword', 'daknis.ogg')]),
        OrderedDict([('auditory_nonword', 'dalmark.ogg')]),
        OrderedDict([('auditory_nonword', 'daplan.ogg')]),
        OrderedDict([('auditory_nonword', 'darlop.ogg')]),
        OrderedDict([('auditory_nonword', 'delobet.ogg')]),
        OrderedDict([('auditory_nonword', 'deshil.ogg')]),
        OrderedDict([('auditory_nonword', 'dgisa.ogg')]),
        OrderedDict([('auditory_nonword', 'dilod.ogg')]),
        OrderedDict([('auditory_nonword', 'dimuf.ogg')]),
        OrderedDict([('auditory_nonword', 'dmutsot.ogg')]),
        OrderedDict([('auditory_nonword', 'dogekh.ogg')]),
        OrderedDict([('auditory_nonword', 'doliso.ogg')]),
        OrderedDict([('auditory_nonword', 'domil.ogg')])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
      Routine set_trial_type
      LoopInitiator nonword_loop loopType="TrialHandler"
        loopType = random
        nReps = 1-(play_target&~(play_test))
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        Routine trial_nonword
      LoopTerminator nonword_loop
      LoopInitiator target loopType="TrialHandler"
        loopType = random
        nReps = play_target
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        Routine trial_target
      LoopTerminator target
      LoopInitiator awareness_trialoop loopType="TrialHandler"
        loopType = random
        nReps = play_test
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        Routine awareness_subj_test
        Routine category_question
        Routine fixation_after_test
      LoopTerminator awareness_trialoop
    LoopTerminator trials_loop
    LoopInitiator show_PAS_inst loopType="TrialHandler"
      loopType = random
      nReps = curr_block==1
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      Routine instructions_PAS
    LoopTerminator show_PAS_inst
    Routine break_screen
  LoopTerminator blocks_loop
  Routine end_exp
